<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="MembraneModel">
  <units name="mV">
    <unit prefix="milli" units="volt"/>
  </units>
  <units name="ms">
    <unit prefix="milli" units="second"/>
  </units>
  <units name="mS_per_cm2">
    <unit prefix="milli" units="siemens"/>
    <unit exponent="-2" prefix="centi" units="metre"/>
  </units>
  <units name="microA_per_cm2">
    <unit prefix="micro" units="ampere"/>
    <unit exponent="-2" prefix="centi" units="metre"/>
  </units>
  <units name="microF_per_cm2">
    <unit prefix="micro" units="farad"/>
    <unit exponent="-2" prefix="centi" units="metre"/>
  </units>
  <component name="membrane">
    <variable name="V" units="mV" interface="public_and_private"/>
    <variable name="t" units="ms" interface="public_and_private"/>
    <variable name="i_K" units="microA_per_cm2" interface="public_and_private"/>
    <variable name="i_Na" units="microA_per_cm2" interface="public_and_private"/>
    <variable name="i_L" units="microA_per_cm2" interface="public_and_private"/>
    <variable name="i_stim" units="microA_per_cm2" interface="public_and_private"/>
    <variable name="i_tot" units="microA_per_cm2" />
    <variable name="n" units="dimensionless" interface="public_and_private"/>
    <variable name="h" units="dimensionless" interface="public_and_private"/>
    <variable name="m" units="dimensionless" interface="public_and_private"/>
    <variable name="Cm" units="microF_per_cm2" interface="public_and_private"/>
    <variable name="E_Na" units="mV" interface="public_and_private"/>
    <variable name="g_Na" units="mS_per_cm2" interface="public_and_private"/>
    <variable name="g_K" units="mS_per_cm2" interface="public_and_private"/>
    <variable name="E_K" units="mV" interface="public_and_private"/>
    <variable name="g_L" units="mS_per_cm2" interface="public_and_private"/>
    <variable name="E_L" units="mV" interface="public_and_private"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML"
      xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>i_stim</ci>
        <piecewise>
          <piece>
            <cn cellml:units="microA_per_cm2">0</cn>
            <apply>
              <lt/>
              <ci>t</ci>
              <cn cellml:units="ms">1</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="microA_per_cm2">0</cn>
            <apply>
              <gt/>
              <ci>t</ci>
              <cn cellml:units="ms">1.2</cn>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="microA_per_cm2">100</cn>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq/>
        <ci>i_tot</ci>
        <apply>
          <plus/>
          <ci>i_stim</ci>
          <ci>i_K</ci>
          <ci>i_Na</ci>
          <ci>i_L</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>V</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="dimensionless">-1</cn>
            <ci>i_tot</ci>
          </apply>
          <ci>Cm</ci>
        </apply>
      </apply>
    </math>
  </component>
</model>
